CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tiff") (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_ch00")
    Name to assign these images:Nuclei_Image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ch01")
    Name to assign these images:YAP1_Image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nuclei_Image
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:YAP1_Image
    Number of pixels by which to expand the primary objects:25
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:YAP1_Image
    Select objects to measure:Cells, Cytoplasm, Nuclei

CalculateMath:[module_num:9|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
    Name the output measurement:YAP1_NC_Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_YAP1_Image
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Intensity_MeanIntensity_YAP1_Image
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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